PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = example_click_doesnt_work
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image = C:/Users/Experimental user/Desktop/Example PsychoPy +Eyelink/Eye-tracking VWP Example/images/Bingo.PNG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        x, y = mouse.getPos()
        if mouse.isPressedIn(image):
            print("x = ", str(x))
            print("y = ", str(y))
Flow
  Routine trial
